PsychoPy2experiment version="2020.2.4"
Settings
  Completed URL = https://duke.qualtrics.com/jfe/form/SV_3K0QGy58pfeZaWF?id=24481
  Data filename = u'data/%s_%s_%s' % (expInfo['test'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = https://duke.qualtrics.com/jfe/form/SV_3K0QGy58pfeZaWF?id=24481
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[-.9,-.9,-.9]
  expName = run_task
  logging level = debug
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Routines
  Routine practice_task
    CodeComponent add_data
      Code Type = Auto->JS
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      Begin Experiment:
        # initalize so we can add data to these variables
        prac_trial_num = 0
        prac_total_points = 0
      Begin Routine:
        # add data
        work_total_presses = 0
        prac_trial_num = prac_trial_num + 1
        psychoJS.experiment.addData('mode', 'practice')
        psychoJS.experiment.addData('prac_trial_num', prac_trial_num)
        psychoJS.experiment.addData('calibration_total_presses', calibration_total_presses)
        psychoJS.experiment.addData('maximum_work_for_feedback_threshold', maximum_work_for_feedback_threshold)
        psychoJS.experiment.addData('final_work_for_feedback_threshold', final_work_for_feedback_threshold)
    PolygonComponent iti_prac
      fillColor = $[1,1,1]
      lineWidth = .01
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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    ImageComponent fractal_one_prac
      image [set every repeat] = $fractal_60_stim
      pos [set every repeat] = $(fractal_60_x_pos, fractal_60_y_pos)
      size = (0.20, 0.20)
      startVal [condition] = $iti_prac.status==FINISHED
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    ImageComponent fractal_two_prac
      image [set every repeat] = $fractal_80_stim
      pos [set every repeat] = $(fractal_80_x_pos, fractal_80_y_pos)
      size = (0.20, 0.20)
      startVal [condition] = $iti_prac.status==FINISHED
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    KeyboardComponent key_resp_prac
      allowedKeys [set every repeat] = 'f','j'
      forceEndRoutine = True
      startVal [condition] = $iti_prac.status==FINISHED
      stopVal [duration (s)] = 2.0
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    CodeComponent outcome_of_trial
      Code Type = Auto->JS
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      End Routine:
        # initialize empty lists for data
        outcome = []
        side_chosen = []
        fractal_chosen = []
        reward = []

        # outcome algorithm based on response and condition
        if condition == 1:
            if key_resp_prac.keys == 'f' and fractal_60_side == 'left' and fractal_60_reward == 1:
                outcome = 'good'
                side_chosen = 'left'
                fractal_chosen = 'fractal_60'
                reward = 1
                prac_total_points = prac_total_points + 1

            elif key_resp_prac.keys == 'f' and fractal_60_side == 'left' and fractal_60_reward == 0:
                outcome = 'bad'
                side_chosen = 'left'
                fractal_chosen = 'fractal_60'
                reward = 0
                prac_total_points = prac_total_points

            elif key_resp_prac.keys == 'j' and fractal_60_side == 'right' and fractal_60_reward == 1:
                outcome = 'good'
                side_chosen = 'right'
                fractal_chosen = 'fractal_60'
                reward = 1
                prac_total_points = prac_total_points + 1

            elif key_resp_prac.keys == 'j' and fractal_60_side == 'right' and fractal_60_reward == 0:
                outcome = 'bad'
                side_chosen = 'right'
                fractal_chosen = 'fractal_60'
                reward = 0
                prac_total_points = prac_total_points

            elif key_resp_prac.keys == 'f' and fractal_80_side == 'left' and fractal_80_reward == 1:
                outcome = 'good'
                side_chosen = 'left'
                fractal_chosen = 'fractal_80'
                reward = 1
                prac_total_points = prac_total_points + 1

            elif key_resp_prac.keys == 'f' and fractal_80_side == 'left' and fractal_80_reward == 0:
                outcome = 'bad'
                side_chosen = 'left'
                fractal_chosen = 'fractal_80'
                reward = 0
                prac_total_points = prac_total_points

            elif key_resp_prac.keys == 'j' and fractal_80_side == 'right' and fractal_80_reward == 1:
                outcome = 'good'
                side_chosen = 'right'
                fractal_chosen = 'fractal_80'
                reward = 1
                prac_total_points = prac_total_points + 1

            elif key_resp_prac.keys == 'j' and fractal_80_side == 'right' and fractal_80_reward == 0:
                outcome = 'bad'
                side_chosen = 'right'
                fractal_chosen = 'fractal_80'
                reward = 0
                prac_total_points = prac_total_points

            else:
                outcome = 'missed'
                side_chosen = 'n/a'
                fractal_chosen = 'n/a'
                reward = 0
                prac_total_points = prac_total_points

        elif condition == 2:
            if key_resp_prac.keys == 'f' and fractal_60_side == 'left' and fractal_60_reward == 1:
                outcome = 'good'
                side_chosen = 'left'
                fractal_chosen = 'fractal_60'
                reward = 1
                prac_total_points = prac_total_points + 1

            elif key_resp_prac.keys == 'f' and fractal_60_side == 'left' and fractal_60_reward == 0:
                outcome = 'bad'
                side_chosen = 'left'
                fractal_chosen = 'fractal_60'
                reward = 0
                prac_total_points = prac_total_points

            elif key_resp_prac.keys == 'j' and fractal_60_side == 'right' and fractal_60_reward == 1:
                outcome = 'good'
                side_chosen = 'right'
                fractal_chosen = 'fractal_60'
                reward = 1
                prac_total_points = prac_total_points + 1

            elif key_resp_prac.keys == 'j' and fractal_60_side == 'right' and fractal_60_reward == 0:
                outcome = 'bad'
                side_chosen = 'right'
                fractal_chosen = 'fractal_60'
                reward = 0
                prac_total_points = prac_total_points

            elif key_resp_prac.keys == 'f' and fractal_80_side == 'left' and fractal_80_reward == 1:
                outcome = 'good'
                side_chosen = 'left'
                fractal_chosen = 'fractal_80'
                reward = 1
                prac_total_points = prac_total_points + 1

            elif key_resp_prac.keys == 'f' and fractal_80_side == 'left' and fractal_80_reward == 0:
                outcome = 'bad'
                side_chosen = 'left'
                fractal_chosen = 'fractal_80'
                reward = 0
                prac_total_points = prac_total_points

            elif key_resp_prac.keys == 'j' and fractal_80_side == 'right' and fractal_80_reward == 1:
                outcome = 'good'
                side_chosen = 'right'
                fractal_chosen = 'fractal_80'
                reward = 1
                prac_total_points = prac_total_points + 1

            elif key_resp_prac.keys == 'j' and fractal_80_side == 'right' and fractal_80_reward == 0:
                outcome = 'bad'
                side_chosen = 'right'
                fractal_chosen = 'fractal_80'
                reward = 0
                prac_total_points = prac_total_points

            else:
                outcome = 'missed'
                side_chosen = 'n/a'
                fractal_chosen = 'n/a'
                reward = 0
                prac_total_points = prac_total_points


        # add data
        psychoJS.experiment.addData('side_chosen', side_chosen)
        psychoJS.experiment.addData('fractal_chosen', fractal_chosen)
        psychoJS.experiment.addData('reward', reward)
        psychoJS.experiment.addData('total_points', prac_total_points)
    CodeComponent feedback_practice_logic_code
      Code Type = Auto->JS
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      Begin Routine:
        # initialize empty lists so we can add data
        decision_to_work_for_feedback = []
        time_of_press_list = []
        current_work_rate_list = []
        current_opacity_level_list = []
        final_opacity_level = []
      End Routine:
        # initialize feedback stim to draw
        load_feedback_stim_to_draw = []

        # draw feedback logic
        if feedback_outcome == 'veridical_feedback' and outcome == 'good' and condition == 1:
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = vertical_feedback_stim

        elif feedback_outcome == 'veridical_feedback' and outcome == 'bad' and condition == 1:
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = horizontal_feedback_stim

        elif feedback_outcome == 'veridical_feedback' and outcome == 'good' and condition == 2:
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = horizontal_feedback_stim

        elif feedback_outcome == 'veridical_feedback' and outcome == 'bad' and condition == 2:
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = vertical_feedback_stim

        elif outcome == 'missed':
            decision_to_work_for_feedback = 'missed_trial'

        elif feedback_outcome == 'no_feedback':
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = grey_no_feedback_stim

        elif feedback_outcome == 'work_option':
            decision_to_work_for_feedback = 'probe'
            load_feedback_stim_to_draw = grey_no_feedback_stim

        # initalize empty lists to help branch experiment
        do_not_do_feedback = []
        do_feedback = []

        if decision_to_work_for_feedback == 'n/a':
            do_not_do_feedback = 1
            do_feedback = 0
            draw_miss = 0

        elif decision_to_work_for_feedback == 'probe':
            do_not_do_feedback = 0
            do_feedback = 1
            draw_miss = 0

        elif decision_to_work_for_feedback == 'missed_trial':
            do_not_do_feedback = 0
            do_feedback = 0
            draw_miss = 1
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
  Routine second_quiz
    CodeComponent quiz_again
      Code Type = Auto->JS
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      Begin Experiment:
        # initialize empty lists so we can add data
        second_stim_quiz_first_question_result = []
        second_stim_quiz_second_question_result = []
        second_stim_quiz_third_question_result = []
      Begin Routine:
        instructions_slide_thirteen.setAutoDraw(True)
      End Routine:
        instructions_slide_thirteen.setAutoDraw(False)
    KeyboardComponent start_second_quiz
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine SAM_hu_question
    ImageComponent SAM_hu
      image = SAM/SAM_hu.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent choice_1
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.30, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_2
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.22, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_3
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.15, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_4
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.07, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_5
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (0, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_6
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.07, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_7
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.15, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_8
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.22, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_9
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.3, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent select_answer_mouse_sam_hu
      clickable = choice_1,choice_2,choice_3,choice_4,choice_5,choice_6,choice_7,choice_8,choice_9
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent get_answer_to_highlight
      Code Type = Auto->JS
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      End Routine:
        answer_to_draw = []
        for answer in [choice_1,choice_2,choice_3,choice_4,choice_5,choice_6,choice_7,choice_8,choice_9]:
            if select_answer_mouse_sam_hu.isPressedIn(answer):
                answer_to_draw = answer
  Routine SAM_hu_directions
    ImageComponent SAM_hu_instructions
      image = SAM/SAM_hu_ins.jpg
      size = (1,.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent SAM_hu_instructions_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_ec_directions
    ImageComponent SAM_ec_instructions
      image = SAM/SAM_ec_ins.jpg
      size = (1,.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent SAM_ec_instructions_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_ec_question
    ImageComponent SAM_ec
      image = SAM/SAM_ec.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent choice_num_1
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.30, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_2
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.22, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_3
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.15, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_4
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.07, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_5
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (0, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_6
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.07, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_7
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.15, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_8
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.22, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_9
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.3, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent select_answer_mouse_sam_ec
      clickable = choice_num_1,choice_num_2,choice_num_3,choice_num_4,choice_num_5,choice_num_6,choice_num_7,choice_num_8,choice_num_9
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent get_answer_to_highlight_pre_sam_ec
      Code Type = Auto->JS
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      End Routine:
        answer_to_draw = []
        for answer in [choice_num_1,choice_num_2,choice_num_3,choice_num_4,choice_num_5,choice_num_6,choice_num_7,choice_num_8,choice_num_9]:
            if select_answer_mouse_sam_ec.isPressedIn(answer):
                answer_to_draw = answer
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  Routine post_task_fractal_question
    CodeComponent post_task_slides
      Code Type = Auto->JS
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      Begin Routine:
        better_fractal = []

        if post_task_fractal_selection == 1:

            fractal_blossom.pos = [-0.2, .04]
            fractal_octopus.pos = [0.2, .04]
            post_task_fractal_slide.setAutoDraw(True)
            fractal_blossom.setAutoDraw(True)
            fractal_octopus.setAutoDraw(True)

        elif post_task_fractal_selection == 2:

            fractal_blossom.pos = [0.2, .04]
            fractal_octopus.pos = [-0.2, .04]
            post_task_fractal_slide.setAutoDraw(True)
            fractal_blossom.setAutoDraw(True)
            fractal_octopus.setAutoDraw(True)
      End Routine:
        better_fractal = []

        if post_task_fractal_selection == 1:

            fractal_blossom.pos = [0.2, .04]
            fractal_octopus.pos = [-0.2, .04]
            post_task_fractal_slide.setAutoDraw(False)
            fractal_blossom.setAutoDraw(False)
            fractal_octopus.setAutoDraw(False)

        elif post_task_fractal_selection == 2:

            fractal_blossom.pos = [-0.2, .04]
            fractal_octopus.pos = [0.2, .04]
            post_task_fractal_slide.setAutoDraw(False)
            fractal_blossom.setAutoDraw(False)
            fractal_octopus.setAutoDraw(False)

        if post_task_fractal_selection == 1 and choose_fractal.keys == '1':
            better_fractal = 'blossom'
        elif post_task_fractal_selection == 1 and choose_fractal.keys == '2':
            better_fractal = 'octopus'
        elif post_task_fractal_selection == 2 and choose_fractal.keys == '1':
            better_fractal = 'octopus'
        elif post_task_fractal_selection == 2 and choose_fractal.keys == '2':
            better_fractal = 'blossom'

        psychoJS.experiment.addData('better_fractal', better_fractal)
    KeyboardComponent choose_fractal
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine total_points_end_experiment
    TextComponent final_total_points
      letterHeight = 0.03
      pos = (-.07, .03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $main_total_points
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    TextComponent rest_of_text
      letterHeight = 0.03
      pos = (0, -.01)
      startVal [time (s)] = 0.0
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      text:
        You have earned         out of a possible 160 points.

        Please click any button to exit.
    KeyboardComponent exit_task
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine SAM_hu_question_2
    ImageComponent SAM_hu_2
      image = SAM/SAM_hu.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent choice_1_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.30, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_2_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.22, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_3_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.15, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_4_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.07, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_5_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (0, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_6_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.07, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_7_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.15, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_8_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.22, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_9_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.3, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent select_answer_mouse_3
      clickable = choice_1_post,choice_2_post,choice_3_post,choice_4_post,choice_5_post,choice_6_post,choice_7_post,choice_8_post,choice_9_post
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent post_hu_highlight_select
      Code Type = Auto->JS
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      End Routine:
        answer_to_draw = []
        for answer in [choice_1_post,choice_2_post,choice_3_post,choice_4_post,choice_5_post,choice_6_post,choice_7_post,choice_8_post,choice_9_post]:
            if select_answer_mouse_3.isPressedIn(answer):
                answer_to_draw = answer
  Routine SAM_ec_question_2
    ImageComponent SAM_ec_2
      image = SAM/SAM_ec.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent choice_num_1_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.30, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_2_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.22, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_3_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.15, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_4_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (-.07, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_5_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (0, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_6_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.07, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_7_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.15, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_8_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.22, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent choice_num_9_post
      fillColor = $[1,1,1]
      lineColor = $[-.9,-.9,-.9]
      nVertices = 100
      pos = (.3, -.18)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent select_answer_mouse_4
      clickable = choice_num_1_post,choice_num_2_post,choice_num_3_post,choice_num_4_post,choice_num_5_post,choice_num_6_post,choice_num_7_post,choice_num_8_post,choice_num_9_post
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent get_post_sam_ec_to_highlight
      Code Type = Auto->JS
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      End Routine:
        answer_to_draw = []
        for answer in [choice_num_1_post,choice_num_2_post,choice_num_3_post,choice_num_4_post,choice_num_5_post,choice_num_6_post,choice_num_7_post,choice_num_8_post,choice_num_9_post]:
            if select_answer_mouse_4.isPressedIn(answer):
                answer_to_draw = answer
  Routine main_task
    CodeComponent add_data_2
      Code Type = Auto->JS
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      Begin Experiment:
        # initalize so we can add data to these variables
        main_trial_num = 0
        main_total_points = 0
      Begin Routine:
        # add data
        work_total_presses = 0
        main_trial_num = main_trial_num + 1
        psychoJS.experiment.addData('mode', 'main')
        psychoJS.experiment.addData('main_trial_num', main_trial_num)
        psychoJS.experiment.addData('calibration_total_presses', calibration_total_presses)
        psychoJS.experiment.addData('maximum_work_for_feedback_threshold', maximum_work_for_feedback_threshold)
        psychoJS.experiment.addData('final_work_for_feedback_threshold', final_work_for_feedback_threshold)
    PolygonComponent iti_main
      fillColor = $[1,1,1]
      lineWidth = .01
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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    ImageComponent fractal_one_main
      image [set every repeat] = $fractal_60_stim
      pos [set every repeat] = $(fractal_60_x_pos, fractal_60_y_pos)
      size = (0.20, 0.20)
      startVal [condition] = $iti_main.status==FINISHED
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    ImageComponent fractal_two_main
      image [set every repeat] = $fractal_80_stim
      pos [set every repeat] = $(fractal_80_x_pos, fractal_80_y_pos)
      size = (0.20, 0.20)
      startVal [condition] = $iti_main.status==FINISHED
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    KeyboardComponent key_resp_main
      allowedKeys [set every repeat] = 'f','j'
      forceEndRoutine = True
      startVal [condition] = $iti_main.status==FINISHED
      stopVal [duration (s)] = 2.0
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    CodeComponent outcome_of_trial_2
      Code Type = Auto->JS
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      End Routine:
        # initialize empty lists for data
        outcome = []
        side_chosen = []
        fractal_chosen = []
        reward = []

        # algorithm based on response and condition
        if condition == 1:
            if key_resp_main.keys == 'f' and fractal_60_side == 'left' and fractal_60_reward == 1:
                outcome = 'good'
                side_chosen = 'left'
                fractal_chosen = 'fractal_60'
                reward = 1
                main_total_points = main_total_points + 1

            elif key_resp_main.keys == 'f' and fractal_60_side == 'left' and fractal_60_reward == 0:
                outcome = 'bad'
                side_chosen = 'left'
                fractal_chosen = 'fractal_60'
                reward = 0
                main_total_points = main_total_points

            elif key_resp_main.keys == 'j' and fractal_60_side == 'right' and fractal_60_reward == 1:
                outcome = 'good'
                side_chosen = 'right'
                fractal_chosen = 'fractal_60'
                reward = 1
                main_total_points = main_total_points + 1

            elif key_resp_main.keys == 'j' and fractal_60_side == 'right' and fractal_60_reward == 0:
                outcome = 'bad'
                side_chosen = 'right'
                fractal_chosen = 'fractal_60'
                reward = 0
                main_total_points = main_total_points

            elif key_resp_main.keys == 'f' and fractal_80_side == 'left' and fractal_80_reward == 1:
                outcome = 'good'
                side_chosen = 'left'
                fractal_chosen = 'fractal_80'
                reward = 1
                main_total_points = main_total_points + 1

            elif key_resp_main.keys == 'f' and fractal_80_side == 'left' and fractal_80_reward == 0:
                outcome = 'bad'
                side_chosen = 'left'
                fractal_chosen = 'fractal_80'
                reward = 0
                main_total_points = main_total_points

            elif key_resp_main.keys == 'j' and fractal_80_side == 'right' and fractal_80_reward == 1:
                outcome = 'good'
                side_chosen = 'right'
                fractal_chosen = 'fractal_80'
                reward = 1
                main_total_points = main_total_points + 1

            elif key_resp_main.keys == 'j' and fractal_80_side == 'right' and fractal_80_reward == 0:
                outcome = 'bad'
                side_chosen = 'right'
                fractal_chosen = 'fractal_80'
                reward = 0
                main_total_points = main_total_points

            else:
                outcome = 'missed'
                side_chosen = 'n/a'
                fractal_chosen = 'n/a'
                reward = 0
                main_total_points = main_total_points

        elif condition == 2:
            if key_resp_main.keys == 'f' and fractal_60_side == 'left' and fractal_60_reward == 1:
                outcome = 'good'
                side_chosen = 'left'
                fractal_chosen = 'fractal_60'
                reward = 1
                main_total_points = main_total_points + 1

            elif key_resp_main.keys == 'f' and fractal_60_side == 'left' and fractal_60_reward == 0:
                outcome = 'bad'
                side_chosen = 'left'
                fractal_chosen = 'fractal_60'
                reward = 0
                main_total_points = main_total_points

            elif key_resp_main.keys == 'j' and fractal_60_side == 'right' and fractal_60_reward == 1:
                outcome = 'good'
                side_chosen = 'right'
                fractal_chosen = 'fractal_60'
                reward = 1
                main_total_points = main_total_points + 1

            elif key_resp_main.keys == 'j' and fractal_60_side == 'right' and fractal_60_reward == 0:
                outcome = 'bad'
                side_chosen = 'right'
                fractal_chosen = 'fractal_60'
                reward = 0
                main_total_points = main_total_points

            elif key_resp_main.keys == 'f' and fractal_80_side == 'left' and fractal_80_reward == 1:
                outcome = 'good'
                side_chosen = 'left'
                fractal_chosen = 'fractal_80'
                reward = 1
                main_total_points = main_total_points + 1

            elif key_resp_main.keys == 'f' and fractal_80_side == 'left' and fractal_80_reward == 0:
                outcome = 'bad'
                side_chosen = 'left'
                fractal_chosen = 'fractal_80'
                reward = 0
                main_total_points = main_total_points

            elif key_resp_main.keys == 'j' and fractal_80_side == 'right' and fractal_80_reward == 1:
                outcome = 'good'
                side_chosen = 'right'
                fractal_chosen = 'fractal_80'
                reward = 1
                main_total_points = main_total_points + 1

            elif key_resp_main.keys == 'j' and fractal_80_side == 'right' and fractal_80_reward == 0:
                outcome = 'bad'
                side_chosen = 'right'
                fractal_chosen = 'fractal_80'
                reward = 0
                main_total_points = main_total_points

            else:
                outcome = 'missed'
                side_chosen = 'n/a'
                fractal_chosen = 'n/a'
                reward = 0
                main_total_points = main_total_points

        # add data
        psychoJS.experiment.addData('side_chosen', side_chosen)
        psychoJS.experiment.addData('fractal_chosen', fractal_chosen)
        psychoJS.experiment.addData('reward', reward)
        psychoJS.experiment.addData('total_points', main_total_points)
    CodeComponent feedback_main_logic_code
      Code Type = Auto->JS
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      Begin Routine:
        # initialize empty lists so we can add data
        decision_to_work_for_feedback = []
        time_of_press_list = []
        current_work_rate_list = []
        current_opacity_level_list = []
        final_opacity_level = []
      End Routine:
        # initialize feedback stim to draw
        load_feedback_stim_to_draw = []

        # draw feedback logic
        if feedback_outcome == 'veridical_feedback' and outcome == 'good' and condition == 1:
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = vertical_feedback_stim

        elif feedback_outcome == 'veridical_feedback' and outcome == 'bad' and condition == 1:
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = horizontal_feedback_stim

        elif feedback_outcome == 'veridical_feedback' and outcome == 'good' and condition == 2:
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = horizontal_feedback_stim

        elif feedback_outcome == 'veridical_feedback' and outcome == 'bad' and condition == 2:
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = vertical_feedback_stim

        elif outcome == 'missed':
            decision_to_work_for_feedback = 'missed_trial'

        elif feedback_outcome == 'no_feedback':
            decision_to_work_for_feedback = 'n/a'
            load_feedback_stim_to_draw = grey_no_feedback_stim

        elif feedback_outcome == 'work_option':
            decision_to_work_for_feedback = 'probe'
            load_feedback_stim_to_draw = grey_no_feedback_stim

        # initalize empty lists to help branch experiment
        do_not_do_feedback = []
        do_feedback = []

        if decision_to_work_for_feedback == 'n/a':
            do_not_do_feedback = 1
            do_feedback = 0
            draw_miss = 0

        elif decision_to_work_for_feedback == 'probe':
            do_not_do_feedback = 0
            do_feedback = 1
            draw_miss = 0

        elif decision_to_work_for_feedback == 'missed_trial':
            do_not_do_feedback = 0
            do_feedback = 0
            draw_miss = 1
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  Routine blank_screen_2
    TextComponent blank_slide_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine initialize_stim_and_key_variables
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
        timer = new util.Clock;
        win = psychoJS.window;
        keys_event = psychoJS.eventManager.getKeys();
        random = Math.random;
        event = psychoJS.eventManager;
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        condition = randint(1,3);
        excel_sheet_choice_practice = randint(1,3);
        excel_sheet_choice_main = randint(1,3);
        instruction_slide_2_selection = randint(1,3);
        select_key_to_press = randint(1,3);
        select_feedback_to_press = randint(1,3);
        random_feedback_stim = randint(1,3);
        post_task_fractal_selection = randint(1,3);
    CodeComponent initialize_condition_and_stim
      Code Type = Auto->JS
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      Begin Experiment:
        # skip subject id
        participant = 'n/a'

        # intizalize quiz and attention check count
        quiz_and_attention_check_fails

        # initialize custom instructions

        instructions_slide_one = visual.ImageStim(win=win,
                                image='instructions/Slide_01_instructions.png',
                                size = (1,.75))

        instructions_slide_two = visual.ImageStim(win=win,
                                image='instructions/Slide_02.1_instructions.png',
                                size = (1,.75))

        instructions_slide_two_second = visual.ImageStim(win=win,
                                image='instructions/Slide_02.2_instructions.png',
                                size = (1,.75))

        instructions_slide_three = visual.ImageStim(win=win,
                                image='instructions/Slide_03_instructions.png',
                                size = (1,.75))

        instructions_slide_four = visual.ImageStim(win=win,
                                image='instructions/Slide_04_instructions.png',
                                size = (1,.75))

        instructions_slide_five = visual.ImageStim(win=win,
                                image='instructions/Slide_05_instructions.png',
                                size = (1,.75))

        instructions_slide_six = visual.ImageStim(win=win,
                                image='instructions/Slide_06_instructions.png',
                                size = (1,.75))

        instructions_slide_seven = visual.ImageStim(win=win,
                                image='instructions/Slide_07.jpg',
                                size = (1,.75))

        instructions_slide_8_01 = visual.ImageStim(win=win,
                                image='instructions/Slide_08.1_instructions.png',
                                size = (1,.75))

        instructions_slide_8_02 = visual.ImageStim(win=win,
                                image='instructions/Slide_08.2_instructions.png',
                                size = (1,.75))

        instructions_slide_8_03 = visual.ImageStim(win=win,
                                image='instructions/Slide_08.3_instructions.png',
                                size = (1,.75))

        instructions_slide_09_01 = visual.ImageStim(win=win,
                                image='instructions/Slide_09.1_instructions.png',
                                size = (1,.75))

        instructions_slide_09_02 = visual.ImageStim(win=win,
                                image='instructions/Slide_09.2_instructions.png',
                                size = (1,.75))

        instructions_slide_10_01 = visual.ImageStim(win=win,
                                image='instructions/Slide_10.1_instructions.png',
                                size = (1.0,.75))

        instructions_slide_10_02 = visual.ImageStim(win=win,
                                image='instructions/Slide_10.2_instructions.png',
                                size = (1.0,.75))

        instructions_slide_eleven = visual.ImageStim(win=win,
                                image='instructions/Slide_11_instructions.png',
                                size = (1,.75))

        instructions_slide_twelve = visual.ImageStim(win=win,
                                image='instructions/Slide_12_instructions.png',
                                size = (1,.75))

        instructions_slide_thirteen = visual.ImageStim(win=win,
                                image='instructions/Slide_13_instructions.png',
                                size = (1,.75))

        instructions_slide_fourteen = visual.ImageStim(win=win,
                                image='instructions/Slide_14_instructions.png',
                                size = (1,.75))

        max_points = visual.ImageStim(win=win,
                                image='instructions/maximize_points.png',
                                size = (1,.75))

        intro_to_kb = visual.ImageStim(win=win,
                                image='instructions/introduce_keyboard.png',
                                size = (1,.75))

        intro_to_kb_old = visual.ImageStim(win=win,
                                image='instructions/introduce_kb.png',
                                size = (1,.75))

        # initialize feedback stimuli
        horizontal_feedback_stim = visual.ImageStim(win=win,
                                image='stimuli/horizontal_feedback.png',
                                size = (0.15, 0.15))

        vertical_feedback_stim = visual.ImageStim(win=win,
                                image='stimuli/vertical_feedback.png',
                                size = (0.15, 0.15))

        grey_no_feedback_stim = visual.ImageStim(win=win,
                                image='stimuli/noninformative_feedback.png',
                                size = (0.15, 0.15))

        # initialize feedback choice stimuli
        feedback_choice_screen = visual.ImageStim(win=win,
                                image='feedback_choice/feedback_choice.png',
                                size = (1,.75))

        feedback_no_screen = visual.ImageStim(win=win,
                                image='feedback_choice/feedback_no.png',
                                size = (1,.75))

        feedback_yes_screen = visual.ImageStim(win=win,
                                image='feedback_choice/feedback_yes.png',
                                size = (1,.75))

        # initalize fractals
        fractal_blossom = visual.ImageStim(win=win,
                                image='stimuli/fractal_blossom.png',
                                size = (0.15, 0.15))

        fractal_octopus = visual.ImageStim(win=win,
                                image='stimuli/fractal_octopus.png',
                                size = (0.15, 0.15))

        # initialize calibration slides
        calibration_slide_1 = visual.ImageStim(win=win,
                                image='calibration/slide1.png',
                                size = (1,.75))

        calibration_slide_2 = visual.ImageStim(win=win,
                                image='calibration/slide2.png',
                                size = (1,.75))

        calibration_slide_3 = visual.ImageStim(win=win,
                                image='calibration/slide3.png',
                                size = (1,.75))

        calibration_slide_4 = visual.ImageStim(win=win,
                                image='calibration/slide4.png',
                                size = (1,.75))

        calibration_slide_5 = visual.ImageStim(win=win,
                                image='calibration/slide5.png',
                                size = (1,.75))

        calibration_slide_6 = visual.ImageStim(win=win,
                                image='calibration/slide6.png',
                                size = (1,.75))

        calibration_slide_7 = visual.ImageStim(win=win,
                                image='calibration/slide7.png',
                                size = (1,.75))

        calibration_slide_8 = visual.ImageStim(win=win,
                                image='calibration/slide8.png',
                                size = (1,.75))

        calibration_slide_9 = visual.ImageStim(win=win,
                                image='calibration/slide9.png',
                                size = (1,.75))

        calibration_slide_10 = visual.ImageStim(win=win,
                                image='calibration/slide10.png',
                                size = (1,.75))

        calibration_slide_11 = visual.ImageStim(win=win,
                                image='calibration/slide11.png',
                                size = (1,.75))

        calibration_slide_12 = visual.ImageStim(win=win,
                                image='calibration/slide12.png',
                                size = (1,.75))

        calibration_slide_13 = visual.ImageStim(win=win,
                                image='calibration/slide13.png',
                                size = (1,.75))


        # initialize post task slides
        post_task_completion_slide = visual.ImageStim(win=win,
                                image='post_task/Slide_15.jpg',
                                size = (1,.75))

        post_task_continue_slide = visual.ImageStim(win=win,
                                image='post_task/Slide_16.jpg',
                                size = (1,.75))

        post_task_fractal_slide = visual.ImageStim(win=win,
                                image='post_task/Slide_17.jpg',
                                size = (1,.75))

        post_task_fractal_1_selected_slide = visual.ImageStim(win=win,
                                image='post_task/Slide_18.jpg',
                                size = (1,.75))

        post_task_fractal_2_selected_slide = visual.ImageStim(win=win,
                                image='post_task/Slide_19.jpg',
                                size = (1,.75))

        # initialize comprehension check slides

        correct_feedback_reminder = visual.ImageStim(win=win,
                                image='comprehension_checks/correct_feedback_reminder.png',
                                size = (1,.75))

        correct_fractal_reminder = visual.ImageStim(win=win,
                                image='comprehension_checks/correct_fractal_reminder.png',
                                size = (1,.75))

        correct_result_no_feedback = visual.ImageStim(win=win,
                                image='comprehension_checks/correct_result_no_feedback.png',
                                size = (1,.75))

        correct_result_plus_one = visual.ImageStim(win=win,
                                image='comprehension_checks/correct_result_plus_one.png',
                                size = (1.0,.75))

        correct_result_plus_zero = visual.ImageStim(win=win,
                                image='comprehension_checks/correct_result_plus_zero.png',
                                size = (1,.75))

        correct_shape = visual.ImageStim(win=win,
                                image='comprehension_checks/correct_shape.png',
                                size = (1,.75))

        incorrect_feedback_reminder = visual.ImageStim(win=win,
                                image='comprehension_checks/incorrect_feedback_reminder.png',
                                size = (1,.75))

        incorrect_fractal_reminder = visual.ImageStim(win=win,
                                image='comprehension_checks/incorrect_fractal_reminder.png',
                                size = (1,.75))

        incorrect_result_no_feedback = visual.ImageStim(win=win,
                                image='comprehension_checks/incorrect_result_no_feedback.png',
                                size = (1,.75))

        incorrect_result_plus_one = visual.ImageStim(win=win,
                                image='comprehension_checks/incorrect_result_plus_one.png',
                                size = (1,.75))

        incorrect_result_plus_zero = visual.ImageStim(win=win,
                                image='comprehension_checks/incorrect_result_plus_zero.png',
                                size = (1,.75))

        incorrect_shape = visual.ImageStim(win=win,
                                image='comprehension_checks/incorrect_shape.png',
                                size = (1,.75))

        press_fractal_left = visual.ImageStim(win=win,
                                image='comprehension_checks/press_fractal_left.png',
                                size = (1,.75))

        press_fractal_right = visual.ImageStim(win=win,
                                image='comprehension_checks/press_fractal_right.png',
                                size = (1,.75))

        press_no_feedback = visual.ImageStim(win=win,
                                image='comprehension_checks/press_no_feedback.png',
                                size = (1,.75))

        press_yes_feedback = visual.ImageStim(win=win,
                                image='comprehension_checks/press_yes_feedback.png',
                                size = (1,.75))

        result_final_reminder = visual.ImageStim(win=win,
                                image='comprehension_checks/result_final_reminder.png',
                                size = (1,.75))

        shapes_question = visual.ImageStim(win=win,
                                image='comprehension_checks/attention_check_shapes.png',
                                size = (1,.75))

        # initialize blank screen
        blank_screen_image_black = visual.ImageStim(win=win,
                                image='stimuli/blank_screen.png',
                                size = (1,.75))
    CodeComponent randomize_conds
      Code Type = Auto->JS
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      Begin Experiment:
        # add data about conditions
        psychoJS.experiment.addData('condition', condition)
        psychoJS.experiment.addData('excel_sheet_choice_practice', excel_sheet_choice_practice)
        psychoJS.experiment.addData('excel_sheet_choice_main', excel_sheet_choice_main)
        psychoJS.experiment.addData('instruction_slide_2_selection', instruction_slide_2_selection)
        psychoJS.experiment.addData('select_key_to_press', select_key_to_press)
        psychoJS.experiment.addData('select_feedback_to_press', select_feedback_to_press)
        psychoJS.experiment.addData('random_feedback_stim', random_feedback_stim)
        psychoJS.experiment.addData('post_task_fractal_selection', post_task_fractal_selection)
  Routine welcome_slide
    ImageComponent slide_1_inst
      image = instructions/Slide_01_instructions.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent welcome_slide_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fractal_selection_quiz
    CodeComponent display_question_and_outcome
      Code Type = Auto->JS
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      Begin Experiment:
        # initialize empty lists
        select_key_to_press_slide = []
        key_to_press_outcome = []

        # set stim to draw
        if select_key_to_press == 1:
            select_key_to_press_slide = press_fractal_left
        elif select_key_to_press == 2:
            select_key_to_press_slide = press_fractal_right
      Begin Routine:
        select_key_to_press_slide.setAutoDraw(True)
      End Routine:
        # get response
        if fractal_selection_quiz_key_resp.keys == 'f' and select_key_to_press == 1:   # correct
            key_to_press_outcome = 'correct'
            quiz_and_attention_check_fails = quiz_and_attention_check_fails

        elif fractal_selection_quiz_key_resp.keys == 'j' and select_key_to_press == 1: # incorrect
            key_to_press_outcome = 'incorrect'
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1

        elif fractal_selection_quiz_key_resp.keys == 'f' and select_key_to_press == 2: # incorrect
            key_to_press_outcome = 'incorrect'
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1

        elif fractal_selection_quiz_key_resp.keys == 'j' and select_key_to_press == 2:  # correct
            key_to_press_outcome = 'correct'
            quiz_and_attention_check_fails = quiz_and_attention_check_fails

        select_key_to_press_slide.setAutoDraw(False)
    KeyboardComponent fractal_selection_quiz_key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_selection_quiz
    CodeComponent show_feedback_slide_and_outcome
      Code Type = Auto->JS
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      Begin Experiment:
        # initialize empty lists so we can add outcome
        select_feedback_to_press_slide = []
        feedback_to_press_outcome = []

        # set stim to draw
        if select_feedback_to_press == 1:
            select_feedback_to_press_slide = press_no_feedback
        elif select_feedback_to_press == 2:
            select_feedback_to_press_slide = press_yes_feedback
      Begin Routine:
        # test work for feedback knowledge
        select_feedback_to_press_slide.setAutoDraw(True)
      End Routine:
        if feedback_selection_quiz_key_resp.keys == 'o' and select_feedback_to_press == 1:   # correct
            feedback_to_press_outcome = 'correct'
            quiz_and_attention_check_fails = quiz_and_attention_check_fails

        elif feedback_selection_quiz_key_resp.keys == 'w' and select_feedback_to_press == 1:   # incorrect
            feedback_to_press_outcome = 'incorrect'
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1

        elif feedback_selection_quiz_key_resp.keys == 'o' and select_feedback_to_press == 2: # incorrect
            feedback_to_press_outcome = 'incorrect'
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1

        elif feedback_selection_quiz_key_resp.keys == 'w' and select_feedback_to_press == 2:   # correct
            feedback_to_press_outcome = 'correct'
            quiz_and_attention_check_fails = quiz_and_attention_check_fails

        select_feedback_to_press_slide.setAutoDraw(False)
    KeyboardComponent feedback_selection_quiz_key_resp
      allowedKeys = 'w','o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine display_feedback_meanings
    CodeComponent draw_feedback_meaining_slide
      Code Type = Auto->JS
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      Begin Routine:
        # display pairings between feedback stim and outcome meanings

        # in condition 1, the vertical stim means reward

        if condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.pos = [-.17, 0.12]
            grey_no_feedback_stim.pos = [.17, 0.12]

            horizontal_feedback_stim.size = (0.10, 0.12)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            instructions_slide_four.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True)

        # in condition 2, the horizontal stim means reward

        elif condition == 2:

            horizontal_feedback_stim.pos = [-.17, 0.12]
            vertical_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.pos = [.17, 0.12]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            instructions_slide_four.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True)
      End Routine:
        # display pairings between feedback stim and outcome meanings

        # in condition 1, the vertical stim means reward

        if condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.pos = [-.17, 0.12]
            grey_no_feedback_stim.pos = [.17, 0.12]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            instructions_slide_four.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False)

        # in condition 2, the horizontal stim means reward

        elif condition == 2:

            horizontal_feedback_stim.pos = [-.17, 0.12]
            vertical_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.pos = [.17, 0.12]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            instructions_slide_four.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False)
    KeyboardComponent display_feedback_meanings_key_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine attention_shape_check
    CodeComponent draw_shape_q
      Code Type = Auto->JS
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      Begin Experiment:
        # initialize empty lists so we can add data
        shape_quiz_result = []
      Each Frame:
        shapes_question.setAutoDraw(True)
      End Routine:
        # check if correct and update count of fails
        if get_shape_response.keys == '1':
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            shape_quiz_result = 'incorrect'

        elif get_shape_response.keys == '2':
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            shape_quiz_result = 'correct'

        shapes_question.setAutoDraw(False)
    KeyboardComponent get_shape_response
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine advance_to_main_task
    CodeComponent advance_to_the_main_task
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_fourteen.setAutoDraw(True)
      End Routine:
        instructions_slide_fourteen.setAutoDraw(False)
    KeyboardComponent enter_main_game
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_instructions
    CodeComponent begin_task_instructions_now
      Code Type = Auto->JS
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      Begin Routine:
        # draw slide based on condition
        if instruction_slide_2_selection == 1:

            fractal_blossom.pos = [-.12, .13]
            fractal_octopus.pos = [.12, .13]

            instructions_slide_two.setAutoDraw(True)
            fractal_blossom.setAutoDraw(True)
            fractal_octopus.setAutoDraw(True)

        elif instruction_slide_2_selection == 2:

            fractal_blossom.pos = [.12, .13]
            fractal_octopus.pos = [-.12, .13]

            instructions_slide_two.setAutoDraw(True)
            fractal_blossom.setAutoDraw(True)
            fractal_octopus.setAutoDraw(True)
      End Routine:
        # draw slide based on condition
        if instruction_slide_2_selection == 1:

            fractal_blossom.pos = [-.12, .13]
            fractal_octopus.pos = [.12, .13]

            instructions_slide_two.setAutoDraw(False)
            fractal_blossom.setAutoDraw(False)
            fractal_octopus.setAutoDraw(False)

        elif instruction_slide_2_selection == 2:

            fractal_blossom.pos = [.12, .13]
            fractal_octopus.pos = [-.12, .13]

            instructions_slide_two.setAutoDraw(False)
            fractal_blossom.setAutoDraw(False)
            fractal_octopus.setAutoDraw(False)
    KeyboardComponent begin_task_instructions_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_begin
    CodeComponent slide_two
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_two_second.setAutoDraw(True)
      End Routine:
        instructions_slide_two_second.setAutoDraw(False)
    KeyboardComponent slide_two_key_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fractal_reminder_show
    CodeComponent reminder
      Code Type = Auto->JS
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      Begin Routine:
        # draw reminder
        if key_to_press_outcome == 'correct':
            correct_fractal_reminder.setAutoDraw(True)
        elif key_to_press_outcome == 'incorrect':
            incorrect_fractal_reminder.setAutoDraw(True)
      End Routine:
        # draw reminder
        if key_to_press_outcome == 'correct':
            correct_fractal_reminder.setAutoDraw(False)
        elif key_to_press_outcome == 'incorrect':
            incorrect_fractal_reminder.setAutoDraw(False)

        # add quiz data
        psychoJS.experiment.addData('key_to_press_outcome', key_to_press_outcome)
    KeyboardComponent fractal_reminder_show_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine draw_slide_3
    CodeComponent draw_the_third_slide
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_three.setAutoDraw(True)
      End Routine:
        instructions_slide_three.setAutoDraw(False)
    KeyboardComponent slide_3_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_quiz_first_question
    CodeComponent start_first_quiz
      Code Type = Auto->JS
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      Begin Experiment:
        # initialize empty lists so we can add data
        first_stim_quiz_first_question_result = []
        first_stim_quiz_second_question_result = []
        first_stim_quiz_third_question_result = []
      Begin Routine:
        # draw first part of quiz
        horizontal_feedback_stim.pos = [0, 0.12]
        horizontal_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(True)
        horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim
      End Routine:
        if first_quiz_first_question_key_resp.keys == '1' and condition == 1:   # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_first_question_result = 'incorrect'

        elif first_quiz_first_question_key_resp.keys == '2' and condition == 1: # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            first_stim_quiz_first_question_result = 'correct'

        elif first_quiz_first_question_key_resp.keys == '3' and condition == 1: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_first_question_result = 'incorrect'

        elif first_quiz_first_question_key_resp.keys == '1' and condition == 2: # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            first_stim_quiz_first_question_result = 'correct'

        elif first_quiz_first_question_key_resp.keys == '2' and condition == 2: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_first_question_result = 'incorrect'

        elif first_quiz_first_question_key_resp.keys == '3' and condition == 2: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_first_question_result = 'incorrect'

        # draw first part of quiz
        horizontal_feedback_stim.pos = [0, 0.12]
        horizontal_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(False)
        horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim
    KeyboardComponent first_quiz_first_question_key_resp
      allowedKeys = '1','2','3',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_quiz_first_question_reminder
    CodeComponent reminder_one
      Code Type = Auto->JS
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      Begin Routine:
        # draw reminder
        if first_stim_quiz_first_question_result == 'correct' and condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_zero.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim

        elif first_stim_quiz_first_question_result == 'incorrect' and condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_zero.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim

        elif first_stim_quiz_first_question_result == 'correct' and condition == 2:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_one.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim

        elif first_stim_quiz_first_question_result == 'incorrect' and condition == 2:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_one.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim
      End Routine:
        # draw reminder
        if first_stim_quiz_first_question_result == 'correct' and condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_zero.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim

        elif first_stim_quiz_first_question_result == 'incorrect' and condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_zero.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim

        elif first_stim_quiz_first_question_result == 'correct' and condition == 2:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_one.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim

        elif first_stim_quiz_first_question_result == 'incorrect' and condition == 2:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_one.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim
    KeyboardComponent first_quiz_first_q_reminder_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_quiz_second_question
    CodeComponent continue_first_quiz
      Code Type = Auto->JS
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      Begin Routine:
        # draw second part of quiz
        grey_no_feedback_stim.pos = [0, 0.12]
        grey_no_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(True)
        grey_no_feedback_stim.setAutoDraw(True) # draw grey stim
      End Routine:
        if first_quiz_second_question_key_resp.keys == '1':   # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_second_question_result = 'incorrect'

        elif first_quiz_second_question_key_resp.keys == '2': # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_second_question_result = 'incorrect'

        elif first_quiz_second_question_key_resp.keys == '3': # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            first_stim_quiz_second_question_result = 'correct'

        # draw second part of quiz
        grey_no_feedback_stim.pos = [0, 0.12]
        grey_no_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(False)
        grey_no_feedback_stim.setAutoDraw(False) # draw grey stim
    KeyboardComponent first_quiz_second_question_key_resp
      allowedKeys = '1','2','3',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_quiz_second_question_reminder
    CodeComponent reminder_two
      Code Type = Auto->JS
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      Begin Routine:
        # draw reminder
        if first_stim_quiz_second_question_result == 'correct':

            grey_no_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.size = (0.10, 0.10)

            correct_result_no_feedback.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True) # draw grey stim

        elif first_stim_quiz_second_question_result == 'incorrect':

            grey_no_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.size = (0.10, 0.10)

            incorrect_result_no_feedback.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True) # draw grey stim
      End Routine:
        # draw reminder
        if first_stim_quiz_second_question_result == 'correct':

            grey_no_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.size = (0.10, 0.10)

            correct_result_no_feedback.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False) # draw grey stim

        elif first_stim_quiz_second_question_result == 'incorrect':

            grey_no_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.size = (0.10, 0.10)

            incorrect_result_no_feedback.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False) # draw grey stim
    KeyboardComponent first_quiz_second_question_reminder_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_quiz_third_question
    KeyboardComponent last_q_first_quiz_key_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent last_q_first_quiz
      Code Type = Auto->JS
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      Begin Routine:
        # draw third part of quiz
        vertical_feedback_stim.pos = [0, 0.12]
        vertical_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(True)
        vertical_feedback_stim.setAutoDraw(True) # draw vertical stim
      End Routine:
        if last_q_first_quiz_key_resp.keys == '1' and condition == 1:   # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            first_stim_quiz_third_question_result = 'correct'

        elif last_q_first_quiz_key_resp.keys == '2' and condition == 1: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_third_question_result = 'incorrect'

        elif last_q_first_quiz_key_resp.keys == '3' and condition == 1: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_third_question_result = 'incorrect'

        elif last_q_first_quiz_key_resp.keys == '1' and condition == 2: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_third_question_result = 'incorrect'

        elif last_q_first_quiz_key_resp.keys == '2' and condition == 2: # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            first_stim_quiz_third_question_result = 'correct'

        elif last_q_first_quiz_key_resp.keys == '3' and condition == 2: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            first_stim_quiz_third_question_result = 'incorrect'

        # draw third part of quiz
        vertical_feedback_stim.pos = [0, 0.12]
        vertical_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(False)
        vertical_feedback_stim.setAutoDraw(False) # draw vertical stim
  Routine first_quiz_third_question_reminder
    KeyboardComponent first_quiz_third_question_reminder_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reminder_3
      Code Type = Auto->JS
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      Begin Routine:
        # draw reminder
        if first_stim_quiz_third_question_result == 'correct' and condition == 1:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_one.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True) # draw vertical stim

        elif first_stim_quiz_third_question_result == 'incorrect' and condition == 1:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_one.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True) # draw vertical stim

        elif first_stim_quiz_third_question_result == 'correct' and condition == 2:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_zero.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True) # draw vertical stim

        elif first_stim_quiz_third_question_result == 'incorrect' and condition == 2:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_zero.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True) # draw vertical stim
      End Routine:
        # draw reminder
        if first_stim_quiz_third_question_result == 'correct' and condition == 1:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_one.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False) # draw vertical stim

        elif first_stim_quiz_third_question_result == 'incorrect' and condition == 1:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_one.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False) # draw vertical stim

        elif first_stim_quiz_third_question_result == 'correct' and condition == 2:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_zero.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False) # draw vertical stim

        elif first_stim_quiz_third_question_result == 'incorrect' and condition == 2:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_zero.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False) # draw vertical stim
  Routine total_reminder_one
    KeyboardComponent first_reminder_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent first_reminder
      Code Type = Auto->JS
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      Begin Routine:
        # draw reminder
        if condition == 1:

            horizontal_feedback_stim.pos = [0, 0.17]
            vertical_feedback_stim.pos = [-.17, 0.17]
            grey_no_feedback_stim.pos = [.17, 0.17]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            result_final_reminder.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True)

        # in condition 2, the horizontal stim means reward

        elif condition == 2:

            horizontal_feedback_stim.pos = [-.17, 0.17]
            vertical_feedback_stim.pos = [0, 0.17]
            grey_no_feedback_stim.pos = [.17, 0.17]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            result_final_reminder.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True)
      End Routine:
        # draw reminder
        if condition == 1:

            horizontal_feedback_stim.pos = [0, 0.17]
            vertical_feedback_stim.pos = [-.17, 0.17]
            grey_no_feedback_stim.pos = [.17, 0.17]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            result_final_reminder.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False)

        # in condition 2, the horizontal stim means reward

        elif condition == 2:

            horizontal_feedback_stim.pos = [-.17, 0.17]
            vertical_feedback_stim.pos = [0, 0.17]
            grey_no_feedback_stim.pos = [.17, 0.17]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            result_final_reminder.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False)

        # add quiz data
        psychoJS.experiment.addData('first_stim_quiz_first_question_result', first_stim_quiz_first_question_result)
        psychoJS.experiment.addData('first_stim_quiz_second_question_result', first_stim_quiz_second_question_result)
        psychoJS.experiment.addData('first_stim_quiz_third_question_result', first_stim_quiz_third_question_result)
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  Routine feedback_post_quiz_reminder
    CodeComponent reminder_about_feedback
      Code Type = Auto->JS
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      Begin Routine:
        # draw reminder
        if feedback_to_press_outcome == 'correct':
            correct_feedback_reminder.setAutoDraw(True)
        elif feedback_to_press_outcome == 'incorrect':
            incorrect_feedback_reminder.setAutoDraw(True)
      End Routine:
        # draw reminder
        if feedback_to_press_outcome == 'correct':
            correct_feedback_reminder.setAutoDraw(False)
        elif feedback_to_press_outcome == 'incorrect':
            incorrect_feedback_reminder.setAutoDraw(False)

        # add data
        psychoJS.experiment.addData('feedback_selection_quiz_result', feedback_to_press_outcome)
    KeyboardComponent feedback_post_quiz_reminder_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine continue_instructions_even_further_11
    CodeComponent continue_even_further
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_eleven.setAutoDraw(True)
      End Routine:
        instructions_slide_eleven.setAutoDraw(False)
    KeyboardComponent slide_11_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine attention_reminder
    KeyboardComponent attention_reminder_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reminder_about_attention
      Code Type = Auto->JS
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      Begin Routine:
        if shape_quiz_result == 'correct':
            correct_shape.setAutoDraw(True)

        elif shape_quiz_result == 'incorrect':
            incorrect_shape.setAutoDraw(True)
      End Routine:
        if shape_quiz_result == 'correct':
            correct_shape.setAutoDraw(False)

        elif shape_quiz_result == 'incorrect':
            incorrect_shape.setAutoDraw(False)

        # add data
        psychoJS.experiment.addData('shape_quiz_result', shape_quiz_result)
  Routine completed_main_task
    ImageComponent post_task_image
      image = post_task/Slide_15.jpg
      size = (1,.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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  Routine continue_to_fractal_question
    CodeComponent continue_to_the_fractal_question
      Code Type = Auto->JS
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      Begin Routine:
        post_task_continue_slide.setAutoDraw(True)
      End Routine:
        post_task_continue_slide.setAutoDraw(False)
    KeyboardComponent go_to_fractal_question
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calib_one
    CodeComponent draw_calib_one
      Code Type = Auto->JS
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      Begin Routine:
        calibration_slide_1.setAutoDraw(True)
      End Routine:
        calibration_slide_1.setAutoDraw(False)
    KeyboardComponent calib_one_space
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine advance_to_practice_session
    KeyboardComponent enter_to_practice_session
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent draw_return_practice_slide
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_twelve.setAutoDraw(True)
      End Routine:
        instructions_slide_twelve.setAutoDraw(False)
  Routine second_quiz_first_question
    CodeComponent first_q_quiz_2
      Code Type = Auto->JS
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      Begin Routine:
        grey_no_feedback_stim.pos = [0, 0.12]
        grey_no_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(True)
        grey_no_feedback_stim.setAutoDraw(True) # draw grey stim
      End Routine:
        if first_q_second_quiz_resp.keys == '1':   # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_first_question_result = 'incorrect'

        elif first_q_second_quiz_resp.keys == '2': # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_first_question_result = 'incorrect'

        elif first_q_second_quiz_resp.keys == '3': # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            second_stim_quiz_first_question_result = 'correct'

        grey_no_feedback_stim.pos = [0, 0.12]
        grey_no_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(False)
        grey_no_feedback_stim.setAutoDraw(False) # draw grey stim
    KeyboardComponent first_q_second_quiz_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_quiz_first_question_reminder
    CodeComponent first_q_second_quiz_reminder
      Code Type = Auto->JS
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      Begin Routine:
        if second_stim_quiz_first_question_result == 'correct':

            grey_no_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.size = (0.10, 0.10)

            correct_result_no_feedback.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True) # draw grey stim

        elif second_stim_quiz_first_question_result == 'incorrect':

            grey_no_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.size = (0.10, 0.10)

            incorrect_result_no_feedback.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True) # draw grey stim
      End Routine:
        if second_stim_quiz_first_question_result == 'correct':

            grey_no_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.size = (0.10, 0.10)

            correct_result_no_feedback.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False) # draw grey stim

        elif second_stim_quiz_first_question_result == 'incorrect':

            grey_no_feedback_stim.pos = [0, 0.12]
            grey_no_feedback_stim.size = (0.10, 0.10)

            incorrect_result_no_feedback.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False) # draw grey stim
    KeyboardComponent advance_q_2_quiz_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_quiz_second_question
    CodeComponent second_q_second_quiz
      Code Type = Auto->JS
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      Begin Routine:
        vertical_feedback_stim.pos = [0, 0.12]
        vertical_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(True)
        vertical_feedback_stim.setAutoDraw(True) # draw vertical stim
      End Routine:
        if resp_q_2_q_2.keys == '1' and condition == 1:   # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            second_stim_quiz_second_question_result = 'correct'

        elif resp_q_2_q_2.keys == '2' and condition == 1: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_second_question_result = 'incorrect'

        elif resp_q_2_q_2.keys == '3' and condition == 1: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_second_question_result = 'incorrect'

        elif resp_q_2_q_2.keys == '1' and condition == 2: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_second_question_result = 'incorrect'

        elif resp_q_2_q_2.keys == '2' and condition == 2: # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            second_stim_quiz_second_question_result = 'correct'

        elif resp_q_2_q_2.keys == '3' and condition == 2: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_second_question_result = 'incorrect'

        vertical_feedback_stim.pos = [0, 0.12]
        vertical_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(False)
        vertical_feedback_stim.setAutoDraw(False) # draw vertical stim
    KeyboardComponent resp_q_2_q_2
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_quiz_second_question_reminder
    CodeComponent draw_q_2_q_2_reminder
      Code Type = Auto->JS
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      Begin Routine:
        if second_stim_quiz_second_question_result == 'correct' and condition == 1:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_one.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True) # draw vertical stim

        elif second_stim_quiz_second_question_result == 'incorrect' and condition == 1:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_one.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True) # draw vertical stim

        elif second_stim_quiz_second_question_result == 'correct' and condition == 2:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_zero.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True) # draw vertical stim

        elif second_stim_quiz_second_question_result == 'incorrect' and condition == 2:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_zero.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True) # draw vertical stim
      End Routine:
        if second_stim_quiz_second_question_result == 'correct' and condition == 1:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_one.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False) # draw vertical stim

        elif second_stim_quiz_second_question_result == 'incorrect' and condition == 1:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_one.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False) # draw vertical stim

        elif second_stim_quiz_second_question_result == 'correct' and condition == 2:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_zero.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False) # draw vertical stim

        elif second_stim_quiz_second_question_result == 'incorrect' and condition == 2:

            vertical_feedback_stim.pos = [0, 0.12]
            vertical_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_zero.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False) # draw vertical stim
    KeyboardComponent advance_q_3_quiz_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_quiz_third_question
    CodeComponent third_q_quiz_two_draw
      Code Type = Auto->JS
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      Begin Routine:
        horizontal_feedback_stim.pos = [0, 0.12]
        horizontal_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(True)
        horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim
      End Routine:
        if resp_quiz_2_q_3.keys == '1' and condition == 1:   # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_third_question_resultt = 'incorrect'

        elif resp_quiz_2_q_3.keys == '2' and condition == 1: # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            second_stim_quiz_third_question_result = 'correct'

        elif resp_quiz_2_q_3.keys == '3' and condition == 1: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_third_question_result = 'incorrect'

        elif resp_quiz_2_q_3.keys == '1' and condition == 2: # correct
            quiz_and_attention_check_fails = quiz_and_attention_check_fails
            second_stim_quiz_third_question_result = 'correct'

        elif resp_quiz_2_q_3.keys == '2' and condition == 2: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_third_question_result = 'incorrect'

        elif resp_quiz_2_q_3.keys == '3' and condition == 2: # incorrect
            quiz_and_attention_check_fails = quiz_and_attention_check_fails + 1
            second_stim_quiz_third_question_result = 'incorrect'

        horizontal_feedback_stim.pos = [0, 0.12]
        horizontal_feedback_stim.size = (0.10, 0.10)

        instructions_slide_six.setAutoDraw(False)
        horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim
    KeyboardComponent resp_quiz_2_q_3
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_quiz_third_question_reminder
    CodeComponent draw_reminder_for_quiz_2_q_3
      Code Type = Auto->JS
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      Begin Routine:
        #reminder
        if second_stim_quiz_third_question_result == 'correct' and condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_zero.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim

        elif second_stim_quiz_third_question_result == 'incorrect' and condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_zero.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim

        elif second_stim_quiz_third_question_result == 'correct' and condition == 2:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_one.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim

        elif second_stim_quiz_third_question_result == 'incorrect' and condition == 2:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_one.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True) # draw horizontal stim
      End Routine:
        #reminder
        if second_stim_quiz_third_question_result == 'correct' and condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_zero.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim

        elif second_stim_quiz_third_question_result == 'incorrect' and condition == 1:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_zero.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim

        elif second_stim_quiz_third_question_result == 'correct' and condition == 2:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            correct_result_plus_one.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim

        elif second_stim_quiz_third_question_result == 'incorrect' and condition == 2:

            horizontal_feedback_stim.pos = [0, 0.12]
            horizontal_feedback_stim.size = (0.10, 0.10)

            incorrect_result_plus_one.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False) # draw horizontal stim
    KeyboardComponent advance_from_second_quiz
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine last_stim_reminder
    KeyboardComponent advance_from_last_reminder
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent draw_the_last_reminder
      Code Type = Auto->JS
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      Begin Routine:
        # draw another reminder
        if condition == 1:

            horizontal_feedback_stim.pos = [0, 0.17]
            vertical_feedback_stim.pos = [-.17, 0.17]
            grey_no_feedback_stim.pos = [.17, 0.17]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            result_final_reminder.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True)

        # in condition 2, the horizontal stim means reward

        elif condition == 2:

            horizontal_feedback_stim.pos = [-.17, 0.17]
            vertical_feedback_stim.pos = [0, 0.17]
            grey_no_feedback_stim.pos = [.17, 0.17]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            result_final_reminder.setAutoDraw(True)
            horizontal_feedback_stim.setAutoDraw(True)
            vertical_feedback_stim.setAutoDraw(True)
            grey_no_feedback_stim.setAutoDraw(True)
      End Routine:
        # draw another reminder
        if condition == 1:

            horizontal_feedback_stim.pos = [0, 0.17]
            vertical_feedback_stim.pos = [-.17, 0.17]
            grey_no_feedback_stim.pos = [.17, 0.17]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            result_final_reminder.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False)

        # in condition 2, the horizontal stim means reward

        elif condition == 2:

            horizontal_feedback_stim.pos = [-.17, 0.17]
            vertical_feedback_stim.pos = [0, 0.17]
            grey_no_feedback_stim.pos = [.17, 0.17]

            horizontal_feedback_stim.size = (0.10, 0.10)
            vertical_feedback_stim.size = (0.10, 0.10)
            grey_no_feedback_stim.size = (0.10, 0.10)

            result_final_reminder.setAutoDraw(False)
            horizontal_feedback_stim.setAutoDraw(False)
            vertical_feedback_stim.setAutoDraw(False)
            grey_no_feedback_stim.setAutoDraw(False)

        # add data
        psychoJS.experiment.addData('second_stim_quiz_first_question_result', second_stim_quiz_first_question_result)
        psychoJS.experiment.addData('second_stim_quiz_second_question_result', second_stim_quiz_second_question_result)
        psychoJS.experiment.addData('second_stim_quiz_third_question_result', second_stim_quiz_third_question_result)
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  Routine no_feedback_work_logic
    ImageComponent no_feedback_work_image
      image = $load_feedback_stim_to_draw
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
      texture resolution = 512
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    CodeComponent draw_FB
      Code Type = Auto->JS
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      Begin Routine:
        load_feedback_stim_to_draw.pos = (0,0)
        load_feedback_stim_to_draw.setAutoDraw(True)
      End Routine:
        load_feedback_stim_to_draw.pos = (0,0)

        load_feedback_stim_to_draw.setAutoDraw(False)
  Routine ask_want_to_work_for_feedback
    KeyboardComponent feedback_choice_key_resp
      allowedKeys = 'o','w'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent feedback_choice_slide
      image = feedback_choice/feedback_choice.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      texture resolution = 512
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    CodeComponent select_highlighted_slide
      Code Type = Auto->JS
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      End Routine:
        # intialize empty lists to branch experiment
        highlight_no = []
        highlight_yes = []

        # decide if we should draw yes or no highlighted slide
        if feedback_choice_key_resp.keys == 'w':
            decision_to_work_for_feedback = 'yes'
            highlight_no = 0
            highlight_yes = 1

        elif feedback_choice_key_resp.keys == 'o':
            decision_to_work_for_feedback = 'no'
            highlight_no = 1
            highlight_yes = 0

        else:
            decision_to_work_for_feedback = 'missed'
            highlight_no = 0
            highlight_yes = 0
  Routine no_fb_highlight
    ImageComponent no_fb_slide
      image = feedback_choice/feedback_no.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = .3
      texture resolution = 512
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  Routine yes_fb_highlight
    ImageComponent yes_fb_slide
      image = feedback_choice/feedback_yes.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = .3
      texture resolution = 512
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  Routine fb_work_time
    CodeComponent decide_stim
      Code Type = Auto->JS
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      Begin Routine:
        # lets set the stim to draw for feedback contingent on condition and outcome
        feedback_stim_to_draw = []

        # in condition 1, the vertical stim means reward
        if condition == 1:

            if outcome == 'good':
                feedback_stim_to_draw = vertical_feedback_stim

            elif outcome == 'bad':
                feedback_stim_to_draw = horizontal_feedback_stim

        # in condition 2, the horizontal stim means reward
        elif condition == 2:

            if outcome == 'good':
                feedback_stim_to_draw = horizontal_feedback_stim

            elif outcome == 'bad':
                feedback_stim_to_draw = vertical_feedback_stim
  Routine missed_trial_logic
    TextComponent missed_trial_practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = No response recorded
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  Routine grey_work_for_fb
    ImageComponent grey_stim_work_for_fb
      image = $load_feedback_stim_to_draw
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    CodeComponent draw_grey_fb
      Code Type = Auto->JS
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      Begin Routine:
        load_feedback_stim_to_draw.pos = (0,0)
        load_feedback_stim_to_draw.setAutoDraw(True)
      End Routine:
        load_feedback_stim_to_draw.pos = (0,0)
        load_feedback_stim_to_draw.setAutoDraw(False)
  Routine draw_feedback_to_screen
    CodeComponent custom_draw_feedback
      Code Type = Auto->JS
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      Begin Routine:
        feedback_stim_to_draw.pos = (0,0)
        grey_no_feedback_stim.pos = (0,0)

        feedback_stim_to_draw.opacity = 1
        grey_no_feedback_stim.opacity = 1

        update_opacity = .0150

        time_of_press = []
        time_of_press_list = []

        work_total_presses = 0

        current_work_rate = []
        current_work_rate_list = []

        current_opacity_level_list = []
        final_opacity_level = []

        event.clearEvents()
      Each Frame:
        feedback_stim_to_draw.setAutoDraw(True)
        grey_no_feedback_stim.setAutoDraw(True)

        keys = psychoJS.eventManager.getKeys();
        if 'space' in keys and draw_feedback_to_screenClock.getTime() < 3.0:
        #if 'space' in keys:

            time_of_press = draw_feedback_to_screenClock.getTime()
            time_of_press_list.push(time_of_press)
            work_total_presses = work_total_presses + 1
            current_work_rate = work_total_presses / time_of_press
            current_opacity_level_list.push(grey_no_feedback_stim.opacity)

            if current_work_rate > final_work_for_feedback_threshold:

                grey_no_feedback_stim.opacity = grey_no_feedback_stim.opacity - update_opacity
      End Routine:
        feedback_stim_to_draw.setAutoDraw(False)
        grey_no_feedback_stim.setAutoDraw(False)
        final_opacity_level = grey_no_feedback_stim.opacity

        event.clearEvents()
    KeyboardComponent work_for_feedback_space_bar_press
      allowedKeys = 'e',
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
      store = nothing
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  Routine post_work_blank
    ImageComponent blank_image
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    KeyboardComponent post_work_space_presses
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      store = all keys
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  Routine calib_last
    CodeComponent calib_code
      Code Type = Auto->JS
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      Begin Routine:
        # set calibration parameters
        calibration_update_duration = .25
        calibration_total_presses = 0
        slide_number = 2
        show_slide = visual.ImageStim(win=win,
                                    image='calibration/slide' + str(slide_number) + '.png',
                                    size = (1,.75))

        calibration_update_duration = .25
        calibration_total_presses = 0
        calibration_time = 3
        time_of_calibration_press = []
        time_of_calibration_press_list = []
      Each Frame:
        show_slide = visual.ImageStim(win=win,
                                    image='calibration/slide' + str(slide_number) + '.png',
                                    size = (1,.75))

        show_slide.setAutoDraw(True)

        calib_keys = psychoJS.eventManager.getKeys();
        if 'space' in calib_keys:

            time_of_calibration_press = calib_lastClock.getTime()
            time_of_calibration_press_list.push(time_of_calibration_press)
            calibration_total_presses = calibration_total_presses + 1

            if calib_lastClock.getTime() > calibration_update_duration:
                slide_number = slide_number + 1
                calibration_update_duration = calibration_update_duration + 0.25

        if calib_lastClock.getTime() > 3:
            show_slide.setAutoDraw(False)
      End Routine:
        show_slide.setAutoDraw(False)
        blank_screen_image_black.setAutoDraw(True)

        # calculate work for feedback threshold
        maximum_work_for_feedback_threshold = calibration_total_presses / calibration_time
        work_for_feedback_threshold_multiplier = .9
        final_work_for_feedback_threshold = work_for_feedback_threshold_multiplier * maximum_work_for_feedback_threshold

        # add data
        psychoJS.experiment.addData('maximum_work_for_feedback_threshold', maximum_work_for_feedback_threshold)
        psychoJS.experiment.addData('final_work_for_feedback_threshold', final_work_for_feedback_threshold)
    KeyboardComponent calibration_space_bar_press
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
      store = all keys
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  Routine isi_screen
    PolygonComponent isi_stim
      fillColor = $[1,1,1]
      lineWidth = .01
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
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  Routine end_loop_data_log
    CodeComponent add_custom_data_code
      Code Type = Auto->JS
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      End Routine:
        # add data
        psychoJS.experiment.addData('decision_to_work_for_feedback', decision_to_work_for_feedback)
        psychoJS.experiment.addData('time_of_press_list', time_of_press_list)
        psychoJS.experiment.addData('work_total_presses', work_total_presses)
        psychoJS.experiment.addData('current_work_rate_list', current_work_rate_list)
        psychoJS.experiment.addData('current_opacity_level_list', current_opacity_level_list)
        psychoJS.experiment.addData('final_opacity_level', final_opacity_level)
  Routine highlight_sam_hu_pre_choice
    ImageComponent Sam_hu_highlight_pre
      image = SAM/SAM_hu.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      texture resolution = 512
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    CodeComponent draw_answer
      Code Type = Auto->JS
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      Each Frame:
        answer_to_draw.fillColor=[.3,.5,.7]
        answer_to_draw.setAutoDraw(True)
      End Routine:
        answer_to_draw.setAutoDraw(False)
  Routine highlight_sam_ec_pre_choice
    ImageComponent sam_ec_pre_highlight
      image = SAM/SAM_ec.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      texture resolution = 512
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    CodeComponent draw_ec_pre_answer
      Code Type = Auto->JS
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      Each Frame:
        answer_to_draw.fillColor=[.3,.5,.7]
        answer_to_draw.setAutoDraw(True)
      End Routine:
        answer_to_draw.setAutoDraw(False)
  Routine highlight_post_sam_hu
    ImageComponent sam_hu_highlight_post
      image = SAM/SAM_hu.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      texture resolution = 512
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    CodeComponent draw_post_hu_highlight_code
      Code Type = Auto->JS
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      Each Frame:
        answer_to_draw.fillColor=[.3,.5,.7]
        answer_to_draw.setAutoDraw(True)
      End Routine:
        answer_to_draw.setAutoDraw(False)
  Routine highlight_sam_ec_post_choice
    ImageComponent sam_ec_post_highlight
      image = SAM/SAM_ec.png
      size = (1,.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      texture resolution = 512
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    CodeComponent draw_sam_ec
      Code Type = Auto->JS
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      Each Frame:
        answer_to_draw.fillColor=[.3,.5,.7]
        answer_to_draw.setAutoDraw(True)
      End Routine:
        answer_to_draw.setAutoDraw(False)
  Routine introduce_keyboard_hand_positioning
    CodeComponent draw_kb
      Code Type = Auto->JS
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      Begin Routine:
        intro_to_kb.setAutoDraw(True)
      End Routine:
        intro_to_kb.setAutoDraw(False)
    KeyboardComponent draw_kb_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_instructions_8_01
    CodeComponent draw_slide_8_01
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_8_01.setAutoDraw(True)
      End Routine:
        instructions_slide_8_01.setAutoDraw(False)
    KeyboardComponent slide_8_01_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_instructions_8_02
    CodeComponent draw_slide_08_02
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_8_02.setAutoDraw(True)
      End Routine:
        instructions_slide_8_02.setAutoDraw(False)
    KeyboardComponent slide_8_02_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_instructions_8_03
    CodeComponent draw_slide_08_03
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_8_03.setAutoDraw(True)
      End Routine:
        instructions_slide_8_03.setAutoDraw(False)
    KeyboardComponent slide_8_03_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine continue_slide_09_01
    CodeComponent draw_09_01
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_09_01.setAutoDraw(True)
      End Routine:
        instructions_slide_09_01.setAutoDraw(False)
    KeyboardComponent slide_09_01_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_slide_09_02
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  Routine continue_slide_10_01
    CodeComponent draw_10_01
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_10_01.setAutoDraw(True)
      End Routine:
        instructions_slide_10_01.setAutoDraw(False)
    KeyboardComponent slide_10_01_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_slide_10_02
    CodeComponent draw_10_02
      Code Type = Auto->JS
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      Begin Routine:
        instructions_slide_10_02.setAutoDraw(True)
      End Routine:
        instructions_slide_10_02.setAutoDraw(False)
    KeyboardComponent slide_10_02_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine slide_max_points
    CodeComponent draw_max_points
      Code Type = Auto->JS
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      Begin Routine:
        max_points.setAutoDraw(True)
      End Routine:
        max_points.setAutoDraw(False)
    KeyboardComponent max_points_slide_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine get_email
    TextComponent email_instructions
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please type your email below to recieve credit for this task:
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    TextboxComponent textbox_email
      bold = False
      color = black
      editable = True
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = Type email here
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    PolygonComponent submit_email
      disabled = True
      fillColor = $[1,1,1]
      pos = (0, -.2)
      shape = rectangle
      size = (0.5, 0.10)
      startVal [time (s)] = 0.0
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    TextComponent submit
      color = black
      disabled = True
      letterHeight = 0.02
      pos = (0, 0-.2)
      startVal [time (s)] = 0.0
      text = Double Click Here To Submit and Continue
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    MouseComponent mouse_email
      clickable = submit_email
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent enter_email
      allowedKeys = 'enter','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.03
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text = Press ENTER or RETURN to submit and continue.
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    CodeComponent email_custom
      Code Type = Auto->JS
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      End Routine:
        thisExp=psychoJS.experiment;
        thisExp.addData('email', textbox_email._pixi.text);
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
Flow
  Routine initialize_stim_and_key_variables
  Routine get_email
  Routine welcome_slide
  Routine SAM_hu_directions
  Routine SAM_hu_question
  Routine highlight_sam_hu_pre_choice
  Routine SAM_ec_directions
  Routine SAM_ec_question
  Routine highlight_sam_ec_pre_choice
  Routine introduce_keyboard_hand_positioning
  Routine begin_instructions
  Routine continue_begin
  Routine slide_max_points
  Routine fractal_selection_quiz
  Routine fractal_reminder_show
  Routine draw_slide_3
  Routine display_feedback_meanings
  Routine first_quiz_first_question
  Routine first_quiz_first_question_reminder
  Routine first_quiz_second_question
  Routine first_quiz_second_question_reminder
  Routine first_quiz_third_question
  Routine first_quiz_third_question_reminder
  Routine total_reminder_one
  Routine continue_instructions_8_01
  Routine continue_instructions_8_02
  Routine continue_instructions_8_03
  Routine feedback_selection_quiz
  Routine feedback_post_quiz_reminder
  Routine continue_slide_09_01
  Routine continue_slide_09_02
  Routine continue_slide_10_01
  Routine continue_slide_10_02
  Routine attention_shape_check
  Routine attention_reminder
  Routine continue_instructions_even_further_11
  Routine calib_one
  Routine calib_last
  Routine advance_to_practice_session
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = $'conditions/practice_task_option_' + excel_sheet_choice_practice + '.xlsx'
    loopType = random
    nReps = 1
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    Routine practice_task
    Routine isi_screen
    LoopInitiator missed_trial loopType="TrialHandler"
      loopType = random
      nReps = $draw_miss
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      Routine missed_trial_logic
    LoopTerminator missed_trial
    LoopInitiator no_feedback_work_trial loopType="TrialHandler"
      loopType = random
      nReps = $do_not_do_feedback
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      Routine no_feedback_work_logic
    LoopTerminator no_feedback_work_trial
    LoopInitiator feedback_work_trial loopType="TrialHandler"
      loopType = random
      nReps = $do_feedback
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      Routine grey_work_for_fb
      Routine ask_want_to_work_for_feedback
      LoopInitiator no_loop_highlight loopType="TrialHandler"
        loopType = random
        nReps = $highlight_no
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        Routine no_fb_highlight
      LoopTerminator no_loop_highlight
      LoopInitiator yes_loop_highlight loopType="TrialHandler"
        loopType = random
        nReps = $highlight_yes
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        Routine yes_fb_highlight
        Routine fb_work_time
        Routine draw_feedback_to_screen
        Routine post_work_blank
      LoopTerminator yes_loop_highlight
    LoopTerminator feedback_work_trial
    Routine end_loop_data_log
  LoopTerminator prac_trials
  Routine blank_screen_2
  Routine second_quiz
  Routine second_quiz_first_question
  Routine second_quiz_first_question_reminder
  Routine second_quiz_second_question
  Routine second_quiz_second_question_reminder
  Routine second_quiz_third_question
  Routine second_quiz_third_question_reminder
  Routine last_stim_reminder
  Routine advance_to_main_task
  LoopInitiator main_trials loopType="TrialHandler"
    conditionsFile = $'conditions/main_task_option_' + excel_sheet_choice_main + '.xlsx'
    loopType = random
    nReps = 1
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    Routine main_task
    Routine isi_screen
    LoopInitiator missed_trial_main_task loopType="TrialHandler"
      loopType = random
      nReps = $draw_miss
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      Routine missed_trial_logic
    LoopTerminator missed_trial_main_task
    LoopInitiator no_feedback_work_trial_main loopType="TrialHandler"
      loopType = random
      nReps = $do_not_do_feedback
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      Routine no_feedback_work_logic
    LoopTerminator no_feedback_work_trial_main
    LoopInitiator feedback_work_trial_main loopType="TrialHandler"
      loopType = random
      nReps = $do_feedback
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      Routine grey_work_for_fb
      Routine ask_want_to_work_for_feedback
      LoopInitiator no_loop_highlight_main loopType="TrialHandler"
        loopType = random
        nReps = $highlight_no
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        Routine no_fb_highlight
      LoopTerminator no_loop_highlight_main
      LoopInitiator yes_loop_highlight_main loopType="TrialHandler"
        loopType = random
        nReps = $highlight_yes
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        Routine yes_fb_highlight
        Routine fb_work_time
        Routine draw_feedback_to_screen
        Routine post_work_blank
      LoopTerminator yes_loop_highlight_main
    LoopTerminator feedback_work_trial_main
    Routine end_loop_data_log
  LoopTerminator main_trials
  Routine blank_screen_2
  Routine completed_main_task
  Routine continue_to_fractal_question
  Routine post_task_fractal_question
  Routine SAM_hu_directions
  Routine SAM_hu_question_2
  Routine highlight_post_sam_hu
  Routine SAM_ec_directions
  Routine SAM_ec_question_2
  Routine highlight_sam_ec_post_choice
  Routine total_points_end_experiment
